/* Soma code #6
 *
 * A simple Soma, with stimulators and synapses.
 * @author Patrick D. Roberts, Neuro. Sci. Inst. OHSU, 03/04 
 * (Supported in part by NSF-IBN0114558 & NIH-R01-MH60364)
 *   
*/

/* The following command loads the standard run library functions into
 * NEURON.  These library functions are used to initialize the
 * NERON, begin and end simulations, and plot variables during a
 * simulation. */
// load_proc("nrnmainmenu")
xopen("$(NEURONHOME)/lib/hoc/noload.hoc")
nrnmainmenu()

tstop = 20			/* Sets the time run the simulation */

proc init_globals() {		/* Function definition to initialize the global variables */

/* membrane defaults */
celsius		= 15
v_init		= -70		/* initial voltage; v at rest */
g_passive	= .0003		/* the standard leak conductance */
erev_passive	= -70		/* the leak (K) reversal potential */
gnaHH		= .12		/* the Hodgkin-Huxley Na conductance */
gkHH		= .036		/* the Hodgkin-Huxley K conductance */
glHH		= .0003		/* the Hodgkin-Huxley leak conductance */
}

init_globals()		/* Initializes the global variables */

create soma     	/* Create all of the cell's sections */
access soma			/* All subsequent references are to soma */
nseg = 1			/* # of compartments */
diam = 50			/* Set the diameter of the soma (in um) */
L = 50				/* Set the length of the soma (in um) */
Ra = 100

insert hh			


objectvar syn 		/* Declare the object variables for the synapses */

/* We add the synapses to the soma. */

soma {
	syn = new AlphaSynapse(0.5) 
	syn.tau = 1	
	syn.onset = 1	
	syn.gmax = .1		
	syn.e = 15		
    }  
/* Declare the object variable for the current pulse stimulus 	
objectvar stim			
soma {
	stim = new IClamp(0)	
	stim.del = 0			
	stim.dur = 0			
	stim.amp = 0	
	}*/
xopen("00_soma.ses")	
/* Open the session file that contains
				 * the menus and graphs */
