
xopen("$(NEURONHOME)/lib/hoc/noload.hoc")

tstop = 20			/* Set the time run the simulation */
proc model_globals() {

/* membrane defaults */
celsius		= 15
v_init		= -70		/* initial voltage; v at rest */
gNaDend		= 0		/* Maximum Na current in the dendrites .02*/
gkDend		= 0		/* Maximum K current in the dendrites .002*/
}
model_globals()

/* First set the dimensions of each section and construct 
   the topology by connecting each of the sections together. . */
{create soma}
{access soma}
soma.L = 15
soma.diam=15
{nseg = 1}
/*
{pt3dclear()}
{pt3dadd(-18.71, 46.87, 0.00, 1.22)}
{pt3dadd(-17.48, 45.00, 0.00, 1.22)}
{pt3dadd(-16.87, 43.75, 0.00, 1.22)}
{pt3dadd(-15.64, 42.81, 0.00, 1.22)}
{pt3dadd(-14.72, 41.87, 0.00, 1.22)}
{pt3dadd(-13.50, 40.31, 0.00, 1.22)}
{pt3dadd(-11.35, 39.06, 0.00, 1.22)}
{pt3dadd(-10.74, 38.12, 0.00, 1.22)}
{pt3dadd(-10.12, 36.87, 0.00, 1.22)}
{pt3dadd(-9.51, 36.25, 0.00, 1.22)}
{pt3dadd(-8.90, 35.00, 0.00, 1.22)}
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*/
{create d1_1}
{soma connect d1_1 (0), 0.5}
{access d1_1}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-26.38, 36.25, 0.00, 3.06)}
{pt3dadd(-28.53, 36.87, 0.00, 3.06)}
{pt3dadd(-30.98, 38.12, 0.25, 3.06)}
{pt3dadd(-32.21, 40.31, 0.54, 3.06)}
{pt3dadd(-33.44, 42.19, 1.29, 3.06)}
{pt3dadd(-34.66, 45.31, 2.46, 3.06)}
{pt3dadd(-35.28, 47.50, 2.81, 3.06)}
{pt3dadd(-36.50, 50.62, 3.59, 3.06)}
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
{create d2_1}
{soma connect d2_1 (0), 0.5}
{access d2_1}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-20.70, 48.44, 0.00, 4.30)}
{pt3dadd(-20.70, 50.31, 0.00, 4.30)}
{pt3dadd(-21.01, 53.13, -0.92, 3.68)}
{pt3dadd(-21.01, 55.31, -1.94, 3.68)}
{pt3dadd(-21.31, 57.19, -2.87, 3.68)}
{pt3dadd(-21.01, 59.38, -3.64, 3.68)}
{pt3dadd(-20.70, 61.25, -4.40, 3.68)}
{pt3dadd(-20.39, 62.50, -4.40, 3.68)}
{pt3dadd(-20.39, 62.50, -5.54, 3.68)}
{pt3dadd(-19.78, 64.38, -6.46, 3.68)}
{pt3dadd(-19.78, 66.25, -6.91, 3.68)}
{pt3dadd(-19.17, 67.50, -7.24, 3.68)}
{pt3dadd(-18.86, 69.69, -8.03, 3.68)}
{pt3dadd(-18.55, 70.94, -8.89, 3.68)}
{pt3dadd(-18.25, 72.50, -8.89, 3.68)}
{pt3dadd(-18.25, 72.50, -10.16, 3.68)}
{pt3dadd(-17.94, 73.75, -10.16, 3.68)}
{pt3dadd(-17.63, 74.69, -10.77, 3.68)}
{pt3dadd(-17.63, 75.63, -11.80, 3.68)}
{pt3dadd(-17.63, 76.56, -12.91, 3.68)}
{pt3dadd(-17.94, 79.06, -14.21, 3.68)}

{create d2_11}
{d2_1 connect d2_11 (0), 1}
{access d2_11}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-17.94, 79.06, -14.21, 3.68)}
{pt3dadd(-14.57, 81.25, -13.62, 3.68)}
{pt3dadd(-12.42, 84.06, -12.78, 3.68)}
{pt3dadd(-10.58, 86.88, -11.27, 3.68)}
{pt3dadd(-10.88, 89.38, -9.90, 3.68)}
{pt3dadd(-12.11, 92.19, -7.79, 3.68)}
{pt3dadd(-15.18, 96.88, -6.15, 3.68)}
{pt3dadd(-17.63, 100.00, -5.18, 3.68)}
{pt3dadd(-20.39, 102.50, -4.34, 3.68)}
{pt3dadd(-22.23, 107.19, -4.34, 3.68)}
{pt3dadd(-20.70, 112.32, -3.72, 3.68)}
{pt3dadd(-19.17, 116.07, -3.72, 3.68)}
{pt3dadd(-17.33, 121.39, -5.10, 3.68)}
{pt3dadd(-16.10, 125.14, -5.10, 3.68)}
{pt3dadd(-15.49, 129.82, -4.42, 3.68)}
{pt3dadd(-15.18, 135.76, -4.42, 3.68)}
{pt3dadd(-13.64, 139.83, -4.42, 3.68)}

{create d2_111}
{d2_11 connect d2_111 (0), 1}
{access d2_111}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-13.64, 139.83, -4.42, 3.68)}
{pt3dadd(-10.88, 142.33, -3.65, 3.68)}
{pt3dadd(-9.35, 145.45, -2.80, 3.68)}
{pt3dadd(-7.51, 147.64, -1.83, 3.68)}
{pt3dadd(-5.06, 152.64, -0.50, 3.68)}
{pt3dadd(-0.76, 160.14, 0.74, 3.68)}
{pt3dadd(1.69, 165.45, 1.55, 3.68)}
{pt3dadd(4.45, 170.76, 1.55, 3.68)}
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
{create d2_112}
{d2_11 connect d2_112 (0), 1}
{access d2_112}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-13.64, 139.83, -4.42, 3.68)}
{pt3dadd(-14.09, 144.83, -4.42, 3.68)}
{pt3dadd(-15.31, 149.83, -2.53, 3.68)}
{pt3dadd(-15.01, 153.89, -1.18, 3.68)}
{pt3dadd(-15.01, 157.33, 0.35, 3.68)}
{pt3dadd(-15.01, 162.01, 1.59, 3.68)}
{pt3dadd(-15.01, 166.39, 2.31, 3.68)}
{pt3dadd(-14.70, 171.39, 3.23, 3.68)}
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
{create d2_12}
{d2_1 connect d2_12 (0), 1}
{access d2_12}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-17.94, 79.06, -14.21, 3.68)}
{pt3dadd(-19.31, 82.18, -8.55, 3.68)}
{pt3dadd(-19.61, 85.61, -6.56, 3.68)}
{pt3dadd(-19.61, 88.74, -4.05, 3.68)}

{create d2_121}
{d2_12 connect d2_121 (0), 1}
{access d2_121}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-19.61, 88.74, -4.05, 3.68)}
{pt3dadd(-29.73, 94.36, 7.08, 3.68)}
{pt3dadd(-19.61, 88.74, -4.05, 3.68)}
{pt3dadd(-13.48, 93.11, -2.62, 3.68)}
{pt3dadd(-11.02, 100.30, -1.18, 3.68)}
{pt3dadd(-11.02, 100.30, 0.43, 3.68)}
{pt3dadd(-9.80, 105.61, 1.45, 3.68)}
{pt3dadd(-9.18, 108.11, 2.65, 3.68)}
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
{create d2_1211}
{d2_121 connect d2_1211 (0), 1}
{access d2_1211}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-18.05, 264.94, 28.78, 3.68)}
{pt3dadd(-11.00, 271.81, 28.33, 3.68)}
{pt3dadd(-5.17, 279.00, 27.28, 3.68)}
{pt3dadd(-3.02, 285.25, 26.03, 3.68)}
{pt3dadd(-2.72, 292.13, 24.98, 3.68)}
{pt3dadd(-0.88, 299.63, 24.32, 3.68)}
{pt3dadd(-1.80, 308.38, 24.32, 3.68)}
{pt3dadd(-2.10, 313.38, 23.84, 3.68)}
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
{create d2_1212}
{d2_121 connect d2_1212 (0), 1}
{access d2_1212}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-18.05, 264.94, 28.78, 3.68)}
{pt3dadd(-17.59, 272.11, 28.23, 3.68)}
{pt3dadd(-17.59, 277.11, 26.89, 3.68)}
{pt3dadd(-15.14, 282.43, 26.02, 3.68)}
{pt3dadd(-12.99, 287.74, 25.12, 3.68)}
{pt3dadd(-11.76, 292.11, 25.12, 3.68)}
{pt3dadd(-20.96, 298.05, 24.18, 3.68)}
{pt3dadd(-29.86, 304.93, 23.58, 3.68)}
{pt3dadd(-36.61, 313.99, 22.85, 3.68)}
{pt3dadd(-40.90, 323.68, 22.04, 3.68)}
{pt3dadd(-45.50, 331.80, 23.56, 3.68)}
{pt3dadd(-50.41, 339.44, 23.56, 3.68)}
{pt3dadd(-51.64, 344.44, 22.47, 3.68)}
{pt3dadd(-55.01, 350.69, 21.33, 3.68)}
{pt3dadd(-57.77, 359.44, 22.79, 3.68)}
{pt3dadd(-59.31, 368.81, 21.07, 3.68)}
{pt3dadd(-60.84, 378.19, 21.07, 3.68)}
{pt3dadd(-62.07, 386.63, 21.07, 3.68)}

{create d2_12121}
{d2_1212 connect d2_12121 (0), 1}
{access d2_12121}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-62.07, 386.63, 21.07, 3.68)}
{pt3dadd(-59.92, 391.63, 22.82, 3.68)}

{create d2_12122}
{d2_1212 connect d2_12122 (0), 1}
{access d2_12122}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-62.07, 386.63, 21.07, 3.68)}
{pt3dadd(-63.80, 390.13, 20.82, 3.68)}

{create d2_121221}
{d2_12122 connect d2_121221 (0), 1}
{access d2_121221}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-63.80, 390.13, 20.82, 3.68)}
{pt3dadd(-62.57, 397.94, 22.49, 3.68)}
{pt3dadd(-61.04, 408.25, 24.78, 3.68)}
{pt3dadd(-60.12, 417.00, 26.73, 3.68)}
{pt3dadd(-58.89, 424.19, 28.59, 3.68)}
{pt3dadd(-56.13, 427.63, 29.33, 3.68)}
{pt3dadd(-60.42, 433.88, 29.34, 3.68)}
{pt3dadd(-62.57, 438.56, 31.11, 3.68)}
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
{create d2_121222}
{d2_12122 connect d2_121222 (0), 1}
{access d2_121222}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-63.80, 390.13, 20.82, 3.68)}
{pt3dadd(-67.00, 395.13, 21.47, 3.68)}
{pt3dadd(-68.53, 400.75, 23.41, 3.68)}
{pt3dadd(-72.52, 409.50, 26.39, 3.68)}
{pt3dadd(-73.74, 420.44, 27.65, 3.68)}
{pt3dadd(-75.58, 427.00, 28.95, 3.68)}
{pt3dadd(-77.43, 430.75, 29.15, 3.68)}
{pt3dadd(-79.88, 437.31, 30.08, 3.68)}
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
{create d2_122}

{d2_12 connect d2_122 (0), 1}
{access d2_122}
d2_122.diam = 3.6 
{nseg = 1}
{pt3dclear()}

{create d3_1}
{soma connect d3_1 (0), 0.5}
{access d3_1}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-0.61, 25.77, 0.00, 3.06)}
{pt3dadd(1.23, 24.84, 0.00, 3.06)}
{pt3dadd(3.69, 24.52, -1.09, 3.06)}
{pt3dadd(6.14, 24.84, -1.87, 3.06)}
{pt3dadd(8.29, 25.77, -1.87, 3.06)}
{pt3dadd(9.82, 27.02, -2.81, 3.06)}
{pt3dadd(12.28, 27.65, -3.85, 3.06)}
{pt3dadd(15.04, 29.52, -4.19, 3.06)}
{pt3dadd(17.80, 31.71, -4.62, 3.06)}
{pt3dadd(19.33, 32.65, -4.62, 3.06)}
{pt3dadd(22.09, 33.90, -4.62, 3.06)}
{pt3dadd(23.93, 35.15, -4.62, 3.06)}

{create d3_11}
{d3_1 connect d3_11 (0), 1}
{access d3_11}
{nseg = 1}
{pt3dclear()}
{pt3dadd(23.93, 35.15, -4.62, 3.06)}
{pt3dadd(27.92, 33.59, -3.77, 2.46)}
{pt3dadd(32.83, 30.77, -3.04, 2.46)}
{pt3dadd(34.67, 30.46, -2.44, 2.46)}
{pt3dadd(36.20, 29.84, -1.96, 2.46)}

{create d3_111}
{d3_11 connect d3_111 (0), 1}
{access d3_111}
{nseg = 1}
{pt3dclear()}
{pt3dadd(36.20, 29.84, -1.96, 2.46)}
{pt3dadd(40.50, 31.40, -1.96, 1.22)}

{create d3_112}
{d3_11 connect d3_112 (0), 1}
{access d3_112}
{nseg = 1}
{pt3dclear()}
{pt3dadd(36.20, 29.84, -1.96, 1.22)}
{pt3dadd(38.96, 27.65, -1.96, 2.46)}
{pt3dadd(44.18, 23.90, -0.97, 2.46)}
{pt3dadd(45.10, 22.65, -0.97, 2.46)}
{pt3dadd(45.10, 21.09, -0.22, 2.46)}
{pt3dadd(46.63, 15.77, 0.98, 2.46)}
{pt3dadd(44.79, 11.09, 2.86, 2.46)}
{pt3dadd(41.72, 4.52, 4.33, 2.46)}
{pt3dadd(40.50, 1.71, 4.33, 2.46)}

{create d3_1121}
{d3_112 connect d3_1121 (0), 1}
{access d3_1121}
{nseg = 1}
{pt3dclear()}
{pt3dadd(40.50, 1.71, 4.33, 2.46)}
{pt3dadd(34.36, -4.23, 4.33, 2.46)}

{create d3_1122}
{d3_112 connect d3_1122 (0), 1}
{access d3_1122}
{nseg = 1}
{pt3dclear()}
{pt3dadd(40.50, 1.71, 4.33, 2.46)}
{pt3dadd(42.64, -2.98, 5.02, 2.46)}
{pt3dadd(45.40, -7.04, 5.95, 2.46)}
{pt3dadd(50.01, -8.60, 3.82, 1.22)}
{pt3dadd(55.83, -12.66, 3.82, 1.22)}
{pt3dadd(64.73, -12.04, 3.82, 0.62)}

{create d3_12}
{d3_1 connect d3_12 (0), 1}
{access d3_12}
{nseg = 1}
{pt3dclear()}
{pt3dadd(23.93, 35.15, -4.62, 0.62)}
{pt3dadd(27.31, 37.02, -4.31, 2.46)}
{pt3dadd(27.31, 39.84, -6.56, 2.46)}
{pt3dadd(26.39, 43.59, -7.73, 2.46)}
{pt3dadd(27.31, 48.59, -9.27, 2.46)}
{pt3dadd(29.76, 53.28, -11.42, 2.46)}
{pt3dadd(37.74, 58.28, -9.13, 2.46)}
{pt3dadd(40.80, 64.53, -7.48, 2.46)}
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
{create d4_1}
{soma connect d4_1 (0), 0.5}
{access d4_1}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-1.98, 23.90, 0.00, 1.84)}
{pt3dadd(1.70, 23.28, -0.21, 1.84)}
{pt3dadd(5.07, 24.53, 0.34, 1.84)}
{pt3dadd(8.76, 26.09, 1.07, 1.84)}
{pt3dadd(11.52, 27.65, 1.54, 1.84)}
{pt3dadd(15.50, 27.65, 2.38, 1.84)}
{pt3dadd(18.88, 24.21, 3.23, 1.84)}
{pt3dadd(21.64, 22.34, 3.81, 1.84)}
{pt3dadd(24.71, 20.15, 3.81, 1.84)}

{create d4_11}
{d4_1 connect d4_11 (0), 1}
{access d4_11}
{nseg = 1}
{pt3dclear()}
{pt3dadd(24.71, 20.15, 3.81, 1.84)}
{pt3dadd(32.68, 23.90, 3.81, 1.84)}

{create d4_12}
{d4_1 connect d4_12 (0), 1}
{access d4_12}
{nseg = 1}
{pt3dclear()}
{pt3dadd(24.71, 20.15, 3.81, 1.84)}
{pt3dadd(29.00, 18.27, 5.40, 1.84)}
{pt3dadd(33.30, 15.15, 6.08, 1.84)}

{create d4_121}
{d4_12 connect d4_121 (0), 1}
{access d4_121}
{nseg = 1}
{pt3dclear()}
{pt3dadd(33.30, 15.15, 6.08, 1.84)}
{pt3dadd(36.98, 13.59, 7.08, 1.84)}
{pt3dadd(44.95, 10.46, 7.22, 1.84)}
{pt3dadd(50.47, 7.96, 7.22, 1.84)}
{pt3dadd(50.47, 7.34, 7.22, 1.84)}

{create d4_122}
{d4_12 connect d4_122 (0), 1}
{access d4_122}
{nseg = 1}
{pt3dclear()}
{pt3dadd(33.30, 15.15, 6.08, 1.84)}
{pt3dadd(28.08, 12.34, 7.18, 1.84)}
{pt3dadd(26.55, 8.59, 7.57, 1.84)}
{pt3dadd(21.95, 5.15, 8.13, 1.84)}
{pt3dadd(20.11, 5.15, 8.13, 1.84)}

{create hillock}
{soma connect hillock (0), 0.5}
{access hillock}
{nseg = 1}
{pt3dclear()}
{pt3dadd(-6.89, 18.90, 0.00, 1.84)}
{pt3dadd(-4.74, 12.34, 0.66, 1.84)}
{pt3dadd(-2.59, 7.96, 2.33, 1.84)}
{pt3dadd(-2.90, 5.15, 4.10, 1.84)}
{pt3dadd(-3.82, 2.34, 5.31, 1.84)}
{pt3dadd(-2.90, -0.79, 6.82, 1.84)}
{pt3dadd(2.62, -3.29, 6.83, 1.84)}

{create axon}
{hillock connect axon (0), 1}
axon {
	diam = 1		/* Set the diameter of the axon (in um) */
	L = 100		/* Set the length of the axon (in um) */
}

define_shape()

/* Set membrane parameters and insert the channels into each section. */
    d1_1 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_1 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_11 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		/* Insert Hodkin-Huxley type channels
				 * in dendrite. */
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_111 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
 	el_hh = -70
   }
    d2_112 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_12 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_121 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_1211 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_1212 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_12121 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_12122 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_121221 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_121222 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d2_122 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_1 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_11 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_111 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_112 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_1121 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_1122 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d3_12 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d4_1 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d4_11 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d4_12 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
	el_hh = -70
    }
    d4_121 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
    d4_122 {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = gNaDend
	gkbar_hh = gkDend
	el_hh = -70
    }
	
    soma {
	nseg = 1		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = .36
	gkbar_hh = .072
	el_hh = -70
    }
    hillock {
	nseg = 5		/* # of compartments */
	Ra = 100
	insert hh		
	gnabar_hh = .36
	gkbar_hh = .072
    }
    axon {
	nseg = 10		/* # of compartments */
	Ra = 100
	insert hh		/* Insert Hodkin-Huxley type channels in the axon. */
	gnabar_hh = .24
	gkbar_hh = .072
    }

/* Declare the object variable for the pulse stimulus */
objectvar stim			
access soma
stim = new IClamp(0.5)		
stim.del = 0			/* Set the starting time (in ms) */
stim.dur = 0			/* Set the duration (in ms) */
stim.amp = 0			/* Set the amplitute (in nA) */

objectvar synExcite1, synExcite2, synExcite3  		/* Declare the object variables for the synapses */

/* We add the synapses to the soma. */
d1_1 {
	synExcite1 = new AlphaSynapse(0.3) 
	synExcite1.tau = 0.5	
	synExcite1.onset = 1	
	synExcite1.gmax = .1		
	synExcite1.e = 15		
    }  
/* We add the synapses to the soma. */
d1_1 {
	synExcite2 = new AlphaSynapse(0.3) 
	synExcite2.tau = 0.5	
	synExcite2.onset = 2	
	synExcite2.gmax = .1		
	synExcite2.e = 15		
    }  
/* We add the synapses to the soma. */
d1_1 {
	synExcite3 = new AlphaSynapse(0.3) 
	synExcite3.tau = 0.5	
	synExcite3.onset = 3	
	synExcite3.gmax = .1		
	synExcite3.e = 15		
    }  


nrnmainmenu()
xopen("01_tSumMG.ses")	
